/**
 * Copyright (C) 2017 Laboratory of Experimental Biophysics
 * Ecole Polytechnique Federale de Lausanne.
 *
 * This script demonstrates how to randomly populate the field with
 * with a 3D distribution of fluorophores.
 *
 */

import ch.epfl.leb.sass.simulator.generators.realtime.*;
import ch.epfl.leb.sass.simulator.generators.realtime.psfs.Gaussian3D;
import ch.epfl.leb.sass.simulator.generators.realtime.fluorophores.PalmProperties;
import java.util.ArrayList;

RNG.setSeed(5);

// *** Initalize generator from the ground up ***
Camera camera = new Camera(
		    32, //res_x
                    32, //res_y
                    100, //acq_speed, 
                    1.6, //readout_noise, 
                    0.06, //dark_current, 
                    0.8, //quantum_efficiency, 
                    2.2,  // ADU_per_electron
                    0,    // EM_gain
                    100,  // baseline, ADU 
                    6.45 * 1e-6, //pixel_size, 
                    1.3, //NA, 
                    600 * 1e-9, //wavelength, 
                    60); //magnification)

// fluorophores: all properties in units per frame
FluorophoreProperties fluo = new PalmProperties(
		    2500, // photons per fluorophore
                    50,   // background
                    100,  //ka
                    0,    // kb
                    7.8/1.2/100.0, // kd1
                    0.2*7.8/1.2/100.0, // kd2
                    0.4/100.0, //kr1
                    15.7/100.0); // kr2
// laser
Laser laser = new Laser(0.0, // start
        500.0, // max
        0.0); // min

// Create a 3D Gaussian point-spread function. The numerical aperture
// is needed to compute the PSF's Rayleigh range.
Gaussian3D.Builder builder = new Gaussian3D.Builder();
builder.FWHM(camera.fwhm_digital); // From the Airy disk
builder.NA(camera.NA);
Gaussian3D gauss3D = builder.build();

// generate emitters 
ArrayList emitters = FluorophoreGenerator.generateFluorophoresRandom3D(
        100, // number of fluorophores
	-10,  // Lower bound on z (units are pixels)
	10,   // Upper bound on z (units are pixels)
	camera,
	gauss3D,
	fluo);
		
// add a gold bead to the field of view at random location
import ch.epfl.leb.sass.simulator.generators.realtime.obstructors.GoldBeads;
ArrayList obstructors = new ArrayList();
Obstructor beads = new GoldBeads(1, camera, 3000);
obstructors.add(beads);

// assemble the device and generator
Device device = new Device(camera, fluo, laser, emitters, obstructors);
STORMsim generator = new STORMsim(device);

// set laser power
generator.setControlSignal(0.03);

// simulate frames
for (i=0;i<10000;i++) {
    if (i%1000==0) {
		System.out.println(i);
	}
	generator.getNextImage();
}

// save and show; uncomment these lines to save and display stack
//generator.saveStack(new File("generated_stack.tif"));
//import ij.ImagePlus;
//ImagePlus ip = new ImagePlus("Simulation output", generator.getStack());
//ip.show();
//ip.updateAndRepaintWindow();

//System.exit(0); // uncomment if you want termination immediately



